'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	DAQ Parameters START
'
'
' WARNING! This file should be used with AlertRig scripts only!!!
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


var DistanceToScreenMM$;		' Distance to screen in MM
var DegreesPerVoltX;			' Conversion factor from ADC to visual degrees
var DegreesPerVoltY;			' Conversion factor from ADC to visual degrees
var EyeCoilSamplingFrequency%;		' Frequency to sample eye coil at
var NumberOfElectrodes%;		' Number of electrodes (i.e. wavemark inputs) in use
var JuicePerReward%;			' Number of juice squirts per reward


GetDAQParameters();


func GetDistanceToScreenMM$()
    return DistanceToScreenMM$;
end

func GetDegreesPerVoltX()
    return DegreesPerVoltX;
end

func GetDegreesPerVoltY()
    return DegreesPerVoltY;
end

func DAQParametersDialog%()

	var iReturn%;
	var idist%;

	GetDAQParameters();

	idist% := val(DistanceToScreenMM$);
	DlgCreate("DAQ parameters: " + GetCurrentConfiguration$());
	DlgInteger(1, "Number of Electrodes:", 1, 7, 0, 0, 1);
	DlgInteger(2, "Screen Distance (MM):", 1, 5000);
	DlgReal(3, "Degrees/Volt (X):", 0, 100);
	DlgReal(4, "Degrees/Volt (Y):", 0, 100);
	DlgInteger(5, "Eye Coil Sampling Freq (Hz):", 1, 20000);
	DlgInteger(6, "Juice per reward:", 0, 10, 0, 0, 1);
	iReturn% := DlgShow(NumberOfElectrodes%, idist%, DegreesPerVoltX, DegreesPerVoltY, EyeCoilSamplingFrequency%, JuicePerReward%);

	if iReturn% = 1 then
		DistanceToScreenMM$ := str$(idist%);
		SaveDAQParameters();
	endif
	return iReturn%;
end;




	
proc GetDAQParameters()
	var key$;
	var DegreesPerVoltX$, DegreesPerVoltY$;

	key$ := thisRigName$ + "\\" + GetCurrentConfiguration$() + "\\DAQ";
	Profile(key$, "DistanceToScreenMM", "850", DistanceToScreenMM$);	' will just pass this to stimulus app
	Profile(key$, "DegreesPerVoltX", "", DegreesPerVoltX$);
	Profile(key$, "DegreesPerVoltY", "", DegreesPerVoltY$);
	Profile(key$, "EyeCoilSamplingFrequency", 1000, EyeCoilSamplingFrequency%);
	Profile(key$, "NumberOfElectrodes", 1, NumberOfElectrodes%);
	Profile(key$, "JuicePerReward", 1, JuicePerReward%);
	DegreesPerVoltX := val(DegreesPerVoltX$);
	DegreesPerVoltY := val(DegreesPerVoltY$);

end;

proc SaveDAQParameters()
	var key$;
	var DegreesPerVoltX$, DegreesPerVoltY$;
	DegreesPerVoltX$ := str$(DegreesPerVoltX);
	DegreesPerVoltY$ := str$(DegreesPerVoltY);
	
	key$ := thisRigName$ + "\\" + GetCurrentConfiguration$() + "\\DAQ";
	Profile(key$, "DistanceToScreenMM", DistanceToScreenMM$);
	Profile(key$, "DegreesPerVoltX", DegreesPerVoltX$);
	Profile(key$, "DegreesPerVoltY", DegreesPerVoltY$);
	Profile(key$, "EyeCoilSamplingFrequency", EyeCoilSamplingFrequency%);
	Profile(key$, "NumberOfElectrodes", NumberOfElectrodes%);
	Profile(key$, "JuicePerReward", JuicePerReward%);

end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	DAQ Parameters END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
